PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2-25_cond_decay_EYE
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Routines
  Routine trial
    TextComponent texter
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $init_cue_time
      text [set every repeat] = $attn_cue
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    PolygonComponent cross
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = $init_cue_time
      stopVal [duration (s)] = $end_cross
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    PolygonComponent left_star
      fillColor = $[255,0,0]
      pos = (-.5, 0)
      shape = star
      size = (.2,.2)
      startVal [time (s)] = $start_stim_1
      stopVal [duration (s)] = $rand_tim
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    PolygonComponent right_star
      fillColor = $[0,255,0]
      pos = (.5, 0)
      shape = star
      size = (.2,.2)
      startVal [time (s)] = $start_stim_1
      stopVal [duration (s)] = $rand_tim
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    PolygonComponent left_2
      fillColor = $[255,0,0]
      opacity [set every repeat] = $left_ob
      pos = (-.5, 0)
      shape = star
      size = (.2,.2)
      startVal [time (s)] = $start_stim_2
      stopVal [duration (s)] = $present_time
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    PolygonComponent right_2
      fillColor = $[0,255,0]
      opacity [set every repeat] = $right_ob
      pos = (.5, 0)
      shape = star
      size = (.2,.2)
      startVal [time (s)] = $start_stim_2
      stopVal [duration (s)] = $present_time
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $start_stim_2
      stopVal [duration (s)] = $present_time
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        # Packages #
        import random as rand
        import numpy as np
        from scipy.stats import uniform

        # Vars #
        feedback = ""
        block_num  =-1
        run_num = 1

        init_cue_time = 1
        isi = 1
        present_time = 1
        arr = [0,1,2,3]
        rand.shuffle(arr)
        ## Functions ##
        def rand_tim_10():
                return np.round(uniform.rvs(loc = .15, scale =9.85, size=1),4)[0]
        def rand_tim_5():
                return np.round(uniform.rvs(loc = .15, scale =4.85, size=1),4)[0]
        def rand_tim_3():
                return np.round(uniform.rvs(loc = .15, scale =2.85, size=1),4)[0]
        def rand_tim_1():
                return np.round(uniform.rvs(loc = .15, scale =.85, size=1),4)[0]
      Begin Experiment:
        print('HEYYYYY')
        print(arr)
      Begin Routine:
        # GENERAL #
        start_stim_1 = init_cue_time + isi
        #####
        if arr[block_num] ==0:
            rand_tim = rand_tim_10()
        elif arr[block_num] ==1:
            rand_tim = rand_tim_5()
        elif arr[block_num]==2:
            rand_tim = rand_tim_3()
        elif arr[block_num]==3:
            rand_tim = rand_tim_1()
        # PROB #
        #rand_tim = rand_tim_10()
        start_stim_1 = init_cue_time + isi
        end_cross = isi +rand_tim + present_time
        start_stim_2 = start_stim_1+rand_tim

        # add condition
        thisExp.addData("block_num", daboi);


        if trial_count< 1:
            print(trials.trialList)
            print('ayo')
            rand.shuffle(trials.trialList)
            print(trials.trialList)

        #tims = [1,2,3,4,5,7.5,10,12.5,15,20]
        #rand_tim = shuffle(tims)
        #print(int_list)
        #rand_tim = 1
      End Routine:
        thisExp.addData('Rand Tim', rand_tim)
        if key_resp.keys == 'space':
            feedback = "Nice!"
        else:
            feedback = "Too Slow!"
        trial_count = trial_count +1
  Routine Cue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    TextComponent cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Left
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import random as rand
        rand_interval= rand.randint(1,5)
  Routine FB
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine Welcome
    TextComponent welcome
      durationEstim = 1.0
      letterHeight = 0.1
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Vigilant Attention Task
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    TextComponent text_2
      durationEstim = 1.0
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = Push the space bar to begin the experiment
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    KeyboardComponent init_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dir_10
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        daboi="yoo"
        trial_count = 0
        block_num = block_num +1
        print("RUN NUM",run_num)
        if arr[block_num] ==0:
            daboi="10s"
        elif arr[block_num] ==1:
            daboi="5s"
        elif arr[block_num]==2:
            daboi="3s"
        elif arr[block_num]==3:
            daboi="1s"
        else:
            daboi = "nuttin"
    TextComponent text_3
      durationEstim = 5
      letterHeight = 0.1
      pos = (.15, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $daboi
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      durationEstim = 5
      letterHeight = .043
      startVal [time (s)] = 0.0
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      text:
        The target transparency change will occur between:










        Press Space to continue
    TextComponent text_5
      durationEstim = 5
      letterHeight = 0.1
      pos = (-.075, 0)
      startVal [time (s)] = 0.0
      text = 0 and
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  Routine end_run
    TextComponent end
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Run number        is over.
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        rand.shuffle(arr)
        run_num = run_num+1
        block_num = -1
    TextComponent text_6
      letterHeight = 0.07
      pos = (.085, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $run_num
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    TextComponent text_7
      letterHeight = 0.06
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Nice Job :)
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Flow
  Routine Welcome
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator blocks loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine dir_10
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = pdist_cond.csv
        loopType = random
        nReps = 2
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        conditions:
          [OrderedDict([('attn_cue', 'left'), ('left_ob', 0.75), ('right_ob', 1.0), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'left'), ('left_ob', 0.75), ('right_ob', 1.0), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'left'), ('left_ob', 0.75), ('right_ob', 1.0), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'left'), ('left_ob', 0.75), ('right_ob', 1.0), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'right'), ('left_ob', 1.0), ('right_ob', 0.75), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'right'), ('left_ob', 1.0), ('right_ob', 0.75), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'right'), ('left_ob', 1.0), ('right_ob', 0.75), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'right'), ('left_ob', 1.0), ('right_ob', 0.75), ('congruent', 0)]),
          OrderedDict([('attn_cue', 'left'), ('left_ob', 1.0), ('right_ob', 0.75), ('congruent', 1)]),
          OrderedDict([('attn_cue', 'right'), ('left_ob', 0.75), ('right_ob', 1.0), ('congruent', 1)])]
        Routine trial
        Routine FB
      LoopTerminator trials
    LoopTerminator blocks
    Routine end_run
  LoopTerminator runs
